<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.4.30">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>D:\git\mzmine3\src\test\resources\rawdatafiles\DOM_a.mzML</file>
            <file>D:\git\mzmine3\src\test\resources\rawdatafiles\DOM_b.mzXML</file>
        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Spectral library files">
            <file>D:\Data\lib\20230319_MoNA-export-LC-MS-MS_Positive_Mode.json</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">30000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">3000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.5</min>
                <max>10.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">5</parameter>
        <parameter name="Minimum intensity for consecutive scans">300000.0</parameter>
        <parameter name="Minimum absolute height">500000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.05</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.8420000000000001</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">500000.0</parameter>
        <parameter name="Min ratio of peak top/edge">2.0</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>1.501</max>
        </parameter>
        <parameter name="Minimum scans (data points)">5</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">0.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.055000003</parameter>
        <parameter name="Minimum feature height">0.0</parameter>
        <parameter name="Intensity threshold for correlation">30000.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>2</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ALL FEATURES</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="MS mode">POSITIVE</parameter>
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
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            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Spectral libraries" type="ALL_IMPORTED"/>
        <parameter name="Scans for matching">MS level ≥ 2 (merged)</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">true</parameter>
        <parameter name="Minimum  matched signals">4</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">SQRT (mz^0 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.2</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>D:\Data\smallest_test\smallest_test_annotations.tsv</current_file>
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        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>D:\Data\smallest_test\smallest_test_gnps</current_file>
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        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">ALL</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">true</parameter>
    </batchstep>
</batch>
